CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "bf")
    Name to assign these images:Brightfield
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "pmod")
    Name to assign these images:Pmod
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Pmod
    Name the primary objects to be identified:ch_pmod_cp_pmodreduced
    Typical diameter of objects, in pixel units (Min,Max):11,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Method to calculate adaptive window size:Image size
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
SaveImages:[module_num:6|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
    Select the type of image to save:Objects
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    Select the objects to save:ch_pmod_cp_pmodreduced
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Pmod
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp-pmodreduced
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select objects to measure:ch_pmod_cp_pmodreduced
    Calculate the Zernike features?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Brightfield
    Name the primary objects to be identified:ch_bfreduced_cp_bfreduced
    Typical diameter of objects, in pixel units (Min,Max):14,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
SaveImages:[module_num:9|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
    Select the type of image to save:Objects
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    Select the objects to save:ch_bfreduced_cp_bfreduced
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp-bfreduced
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:ch_bfreduced_cp_bfreduced
    Calculate the Zernike features?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Brightfield
    Name the primary objects to be identified:ch_bfreduced_cp_bfreducedmini
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
SaveImages:[module_num:12|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
    Select the type of image to save:Objects
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    Select the objects to save:ch_bfreduced_cp_bfreducedmini
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Brightfield
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp-bfreducedmini
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:ch_bfreduced_cp_bfreducedmini
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::m_050714_s13_
    Overwrite without warning?:Yes
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